PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = maskingDemo
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        iti = 0
        minIti = 180
        maxIti = 300
        feedback = ''
      Begin Routine:
        iti = minIti + (maxIti - minIti) * random()
      End Routine:
        if not keyResponse.keys:
            feedback = 'no response'
        elif targetContrast == 0:
            if random() > 0.5:
                feedback = 'correct'
            else:
                feedback = 'incorrect'
        elif ((targetPosition < 0 and 'left' in keyResponse.keys) or
              (targetPosition > 0 and 'right' in keyResponse.keys)):
            feedback = 'correct'
        else:
            feedback = 'incorrect'
    TextComponent feedbackText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
      units = norm
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
    KeyboardComponent keyResponse
      allowedKeys = 'left','right'
      durationEstim = 2.1
      forceEndRoutine = True
      startEstim = 3
      startVal [frame N] = $iti
      stopVal [duration (s)] = 2.1
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    GratingComponent target
      contrast [set every repeat] = targetContrast
      durationEstim = 0.0167
      mask = circle
      pos [set every repeat] = (targetPosition, 0)
      sf = 2
      size = (0.1, 0.1)
      startEstim = 3
      startVal [frame N] = $iti
      stopVal [duration (frames)] = 1
      tex = sqr
      units = norm
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    GratingComponent maskLeftVert
      contrast [set every repeat] = maskContrast
      mask = circle
      opacity = 0.5
      pos = (-0.5, 0)
      sf = 2
      size = (0.1, 0.1)
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (s)] = 2
      tex = sqr
      units = norm
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    GratingComponent maskLeftHorz
      contrast [set every repeat] = maskContrast
      mask = circle
      opacity = 0.5
      ori = 90
      pos = (-0.5, 0)
      sf = 2
      size = (0.1, 0.1)
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (s)] = 2
      tex = sqr
      units = norm
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    GratingComponent maskRightVert
      contrast [set every repeat] = maskContrast
      mask = circle
      opacity = 0.5
      pos = (0.5, 0)
      sf = 2
      size = (0.1, 0.1)
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (s)] = 2
      tex = sqr
      units = norm
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    GratingComponent maskRightHorz
      contrast [set every repeat] = maskContrast
      mask = circle
      opacity = 0.5
      ori = 90
      pos = (0.5, 0)
      sf = 2
      size = (0.1, 0.1)
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (s)] = 2
      tex = sqr
      units = norm
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = maskingDemoConditions.xlsx
    loopType = random
    nReps = 150
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    conditions:
      [{'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0, 'targetPosition': 0, 'maskContrast': 0.4, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 0.017},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 0.033},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 0.05},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 0.067},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 0.083},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 0.1},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 0.017},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 0.033},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 0.05},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 0.067},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 0.083},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 0.1}]
    Routine trial
  LoopTerminator trials
